PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/sub-%s_%s_%s' % (expInfo['participant'],expInfo['age'], expInfo['expName'])
  Experiment info = {'participant': '01', 'age': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  expName = DEMO1
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine intro
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    TextComponent hello
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Hello, dear Python aficionado.
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    TextComponent welcome
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = Welcome to this super basic Psychopy Builder demo.
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    TextComponent wait_key
      letterHeight = 0.075
      startVal [time (s)] = 4
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      text:
        What about some images?

        To see some images, press ‘enter’.
    KeyboardComponent key_resp
      allowedKeys = "return"
      forceEndRoutine = True
      startVal [time (s)] = 4
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  Routine gabor
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    TextComponent gabor_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = And what about a fancy “gabor wavelet”?
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    GratingComponent gabor_stim
      mask = gauss
      sf = 10
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      tex = sin
      texture resolution = 512
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  Routine wrap_up
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    TextComponent txt1
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = There’s so much more you can do with Psychopy …
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    TextComponent txt2
      letterHeight = 0.075
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = But let’s stop here …
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    TextComponent txt3
      letterHeight = 0.1
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1
      text = Goodbye!
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  Routine show_stimulus
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    ImageComponent stim
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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  Routine the_end
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        the end 2
Flow
  Routine intro
  LoopInitiator stimulus_loop loopType="TrialHandler"
    conditionsFile = stimuli.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('image', 'Python.png')]),
      OrderedDict([('image', 'R.jpeg')]),
      OrderedDict([('image', 'Matlab.png')])]
    Routine show_stimulus
  LoopTerminator stimulus_loop
  Routine gabor
  Routine wrap_up
  Routine the_end
