PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '1', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = ssr_1
  keyboardBackend = ioHub
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Routines
  Routine start
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Specific Stimuli Response

        PRESS 'ENTER' TO START
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stimuli
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    ImageComponent figura
      image [set every repeat] = $Stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine explicacion
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = PULSA ESPACIO SOLO CUANDO APAREZCAN CUADRADOS ROJOS O CIRCULOS AZUL OSCURO
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  Routine isi
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    PolygonComponent polygon
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine start
  Routine explicacion
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'Stimulus': '1.png', 'Target': 1},
      {'Stimulus': '2.png', 'Target': 1},
      {'Stimulus': '3.png', 'Target': 0},
      {'Stimulus': '4.png', 'Target': 0},
      {'Stimulus': '5.png', 'Target': 0},
      {'Stimulus': '6.png', 'Target': 0},
      {'Stimulus': '7.png', 'Target': 0},
      {'Stimulus': '8.png', 'Target': 0},
      {'Stimulus': '9.png', 'Target': 0},
      {'Stimulus': '10.png', 'Target': 0},
      {'Stimulus': '11.png', 'Target': 0},
      {'Stimulus': '12.png', 'Target': 0},
      {'Stimulus': '13.png', 'Target': 0},
      {'Stimulus': '14.png', 'Target': 0},
      {'Stimulus': '15.png', 'Target': 0},
      {'Stimulus': '16.png', 'Target': 0},
      {'Stimulus': '17.png', 'Target': 0},
      {'Stimulus': '18.png', 'Target': 0},
      {'Stimulus': '19.png', 'Target': 0},
      {'Stimulus': '20.png', 'Target': 0},
      {'Stimulus': '21.png', 'Target': 0},
      {'Stimulus': '22.png', 'Target': 0},
      {'Stimulus': '23.png', 'Target': 0},
      {'Stimulus': '24.png', 'Target': 0}]
    Routine stimuli
  LoopTerminator trials
