PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/sub-{nr}'
  Experiment info = {'participant': '1'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  expName = stroop
  keyboardBackend = ioHub
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Routines
  Routine welcome
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    TextComponent welcome_txt
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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      text:
        Welcome to the Stroop Game!
  Routine instructions
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    TextComponent instructions_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will see words (either “green” or “red”) in different colors (also either “green” or “red”). Importantly, you need to respond to the COLOR of the word and you need to ignore the actual word. You respond with the arrow keys:

        GREEN color = left RED color = right

        (Press ‘enter’ to start the experiment!)
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine init_fix
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    PolygonComponent circle
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = height
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  Routine stim
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    TextComponent trial_txt
      color [set every repeat] = $stim_color
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $stim_word
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    KeyboardComponent response
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine isi
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    PolygonComponent polygon
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_isi
      units = height
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    CodeComponent time_isi
      Code Type = Py
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      Begin Experiment:
        import random
        t_isi = random.uniform(0, 1)
  Routine circles_routine
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    TextComponent click
      letterHeight = 0.2
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Click the 
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    TextComponent word
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = GREEN
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    PolygonComponent greencircle
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.5, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      units = height
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    PolygonComponent redcircle
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.5, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      units = height
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    MouseComponent mouse
      clickable = greencircle, redcircle
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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Flow
  Routine welcome
  Routine instructions
  Routine init_fix
  LoopInitiator trial_loop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'stim_word': 'red', 'stim_color': 'red'},
      {'stim_word': 'red', 'stim_color': 'red'},
      {'stim_word': 'red', 'stim_color': 'red'},
      {'stim_word': 'red', 'stim_color': 'red'},
      {'stim_word': 'red', 'stim_color': 'red'},
      {'stim_word': 'red', 'stim_color': 'green'},
      {'stim_word': 'red', 'stim_color': 'green'},
      {'stim_word': 'red', 'stim_color': 'green'},
      {'stim_word': 'red', 'stim_color': 'green'},
      {'stim_word': 'red', 'stim_color': 'green'},
      {'stim_word': 'green', 'stim_color': 'green'},
      {'stim_word': 'green', 'stim_color': 'green'},
      {'stim_word': 'green', 'stim_color': 'green'},
      {'stim_word': 'green', 'stim_color': 'green'},
      {'stim_word': 'green', 'stim_color': 'green'},
      {'stim_word': 'green', 'stim_color': 'red'},
      {'stim_word': 'green', 'stim_color': 'red'},
      {'stim_word': 'green', 'stim_color': 'red'},
      {'stim_word': 'green', 'stim_color': 'red'},
      {'stim_word': 'green', 'stim_color': 'red'}]
    Routine stim
    Routine isi
  LoopTerminator trial_loop
  Routine circles_routine
