PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s' % (expInfo['experiment'], expName)
  Experiment info = {'experiment': '1'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = visualsearch
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent target
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = T
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # number of distractors

        n_distractors = 50
        distractors=[]

        for i in range(n_distractors):
            distractor = visual.TextStim(win=win, name='distractor',
                    text='L',
                    font='Open Sans',
                    pos=(random()-0.5, random()-0.5), height=0.05, wrapWidth=None, ori=0.0,
                    color='white', colorSpace='rgb', opacity=None,
                    languageStyle='LTR',
                    depth=-1.0);

            distractors.append(distractor)

        for distractor in distractors:
            distractor.setAutoDraw(True)
      End Routine:
        for distractor in distractors:
            distractor.setAutoDraw(False)
    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
